#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'savelogic', 'tasklogic']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:


    microwave_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20


    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        #choose_trace: True
        #gated: False

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    laserdummy:
        module.Class: 'laser.simple_laser_dummy.SimpleLaserDummy'

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

logic:

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'mydummypulser'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'mydummyfastcounter'
            pulsegenerator: 'mydummypulser'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'microwave_dummy'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
        #    scannerLocationRefocus:
        #        module: 'refocus'
        #        preposttasks: ['fliplasermirror']
        #        pausetasks: ['scan', 'odmr']
        #        needsmodules:
        #            optimizer: 'optimizerlogic'
        #            scanner: 'scannerlogic'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]
            robledo:
                module: pulsed_task
                needsmodules:
                    pulsed_master: 'pulsedmasterlogic'
                    laser: 'laserlogic'
                config:
                    name: 'robledo'
                    switch_time: 15
                    power: [200e-6, 1200e-6]
                    wait_time:  [2e-6, 6e-6]
                    save_laser_pulses: False
                    save_pulsed_measurement: False
                    save_figure: False
            refocus:
                module: 'refocus'
                pausetasks: ['robledo']
                needsmodules:
                    poi_manager: 'poimanagerlogic'
                    laser: 'laserlogic'
            tracking:
                module: 'tracking'
                needsmodules:
                    task_logic: 'tasklogic'  # inception
                    poi_manager: 'poimanagerlogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

    laserlogic:
        module.Class: 'laser_logic.LaserLogic'
        connect:
            laser: 'laserdummy'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimizer1: 'optimizerlogic'
            savelogic: 'savelogic'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            savelogic: 'savelogic'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            fitlogic: 'fitlogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'


    taskrunner:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'tasklogic'


    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'

    laser:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanagerlogic'
            confocallogic1: 'scannerlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02
        default_meter_prefix: 'u'