# Config file for a simple simulation of the core functions: Confocal, counter,
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    processdummy:
        module.Class: 'process_dummy.ProcessDummy'

logic:
    process_value_modifier:
        module.Class: 'interfuse.process_value_modifier.ProcessValueModifier'
        connect:
            hardware: 'processdummy'
        calibration_file: 'config/example/test.calib'
        force_calibration_from_file: True

    process_control_modifier:
        module.Class: 'interfuse.process_control_modifier.ProcessControlModifier'
        connect:
            hardware: 'processdummy'
        calibration_file: 'config/example/test.calib'
        force_calibration_from_file: True


    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    softpid:
        module.Class: 'software_pid_controller.SoftPIDController'
        connect:
            process: 'process_value_modifier'
            control: 'process_control_modifier'

    pidlogic:
        module.Class: 'pid_logic.PIDLogic'
        connect:
            controller: 'softpid'
            savelogic: 'save'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    pidcontrol:
        module.Class: 'pidgui.pidgui.PIDGui'
        connect:
            pidlogic: 'pidlogic'
